PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'sex at birth': '', 'dominant hand': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Working memory load
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Routines
  Routine trial
    ImageComponent stim1
      image [set every repeat] = $stimulus1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim2
      image [set every repeat] = $stimulus2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim3
      image [set every repeat] = $stimulus3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    ImageComponent stim4
      image [set every repeat] = $stimulus4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    PolygonComponent fixDelay
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 10
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    ImageComponent probe
      image [set every repeat] = $probeIm
      size = (0.2, 0.2)
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 1.2
      texture resolution = 512
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    TextComponent probeIndicator
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 1.2
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      text [set every repeat]:
        $arrowDir
    PolygonComponent fixProbe
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 14.7
      stopVal [duration (s)] = 3
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    KeyboardComponent keyResp
      allowedKeys = 'right','left','None'
      correctAns = $correctResp
      forceEndRoutine = False
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 4.2
      store = first key
      storeCorrect = True
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    CodeComponent setNumCorrectRun
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
            number_correct = 0
    ImageComponent mask1_run
      image [set every repeat] = $mask1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_prac_2
      image [set every repeat] = $mask2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask3_run
      image [set every repeat] = $mask3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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    ImageComponent mask4_run
      image [set every repeat] = $mask4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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  Routine blankStart
    PolygonComponent fixStart
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine blankEnd
    PolygonComponent fixEnd
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine trialEndBlank
    PolygonComponent fixStartTrial
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent countCorrectRun
      Code Type = Auto->JS
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      End Routine:
        if keyResp.corr:
            number_correct = number_correct + 1

        percent_correct = str(round(number_correct/trials.nTotal*100,2))
  Routine Before_run
    TextComponent text_run
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $textBefore_run
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    KeyboardComponent trigger1
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent numberCorrect_Reset
      Code Type = Auto->JS
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      Begin Routine:
        number_correct = 0
  Routine Welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!
        (Press space to continue)
    KeyboardComponent space1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_2
    CodeComponent feedbackCode
      Code Type = Auto->JS
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      Begin Experiment:
        msg=""
      Begin Routine:
        if keyResp_Practice.corr:
            msg="Correct"
            number_correct = number_correct+1
        else:
            msg="Incorrect"
    TextComponent feedbackText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = $msg
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    CodeComponent totalCorrect
      Code Type = Auto->JS
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      End Routine:
        percent_correct = str(round(number_correct/trials_instr2.nTotal*100,2))
  Routine Instr1
    TextComponent Instruction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
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    KeyboardComponent space2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_Instr
    ImageComponent stim1_inst
      image [set every repeat] = $stimulus1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent stim2_inst
      image [set every repeat] = $stimulus2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      texture resolution = 512
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    ImageComponent stim3_inst
      image [set every repeat] = $stimulus3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent stim4_inst
      image [set every repeat] = $stimulus4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent trialExplanation
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = On this trial, you have to remember one stimulus and ignore the scrambled images
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    KeyboardComponent space3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delayInst
    PolygonComponent fixDelay_2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0
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    TextComponent delayExplanation
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = The red cross indicates the delay period. You have to keep the presented images in mind during this time. Fixate on the cross whenever it is present. No response can be made during this time.  
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    KeyboardComponent space4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine responseInst
    ImageComponent probe_inst
      image [set every repeat] = $probeIm
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      texture resolution = 512
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    TextComponent probeIndicator_inst
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $arrowDir
    PolygonComponent fixProbe_inst
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 2.5
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    KeyboardComponent reponseInstr
      allowedKeys = 'left'
      correctAns = $correctResp
      forceEndRoutine = True
      startVal [time (s)] = 2.5
      storeCorrect = True
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    TextComponent probeInst
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 2.5
      text = You just saw the test image. In this case, it was part of the memorized images. You also saw an arrow above the image. Press the correct arrow key to continue. You can answer immediately after the test image is presented without waiting for the green fixation cross. 
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  Routine reward
    TextComponent rewardInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Great!
        We will now have a couple of training trials to make sure you understood the task. (Press 'space')
    KeyboardComponent space5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedbackTest
    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Perfomance has to be above 70% to move-on to the real task. Otherwise we can practice a little more. Your performance was '+percent_correct+'%.'
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    CodeComponent calculateTotalPerformance
      Code Type = Auto->JS
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      Begin Routine:
        if number_correct/(trials_instr2.nTotal) >= 0.63:
            repeat_InstrTrials.finished = True
  Routine reminderButtons
    TextComponent Button_reminder
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Response reminder: left arrow if "<" and test image was part of memory images.
        Right arrow if ">" and test image was part of memory images
        NO response if test image was NOT part of memory images
        (Press 'space' to start practice trials)
    KeyboardComponent space6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent numCorrect
      Code Type = Auto->JS
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      Begin Routine:
        number_correct = 0
  Routine trialBegBlank_practice
    PolygonComponent fixStartTrial_2
      fillColor = $[1,1,1]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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  Routine trial_practice
    ImageComponent stim1_Practice
      image [set every repeat] = $stimulus1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim2_Practice
      image [set every repeat] = $stimulus2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.3
      texture resolution = 512
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    ImageComponent stim3_Practice
      image [set every repeat] = $stimulus3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    ImageComponent stim4_Practice
      image [set every repeat] = $stimulus4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.3
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    PolygonComponent fixDelay_Practice
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 10
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    ImageComponent probe_Practice
      image [set every repeat] = $probeIm
      size = (0.2, 0.2)
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 1.2
      texture resolution = 512
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    TextComponent probeIndicator_Practice
      letterHeight = 0.1
      pos = (0,0.2)
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 1.2
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      text [set every repeat]:
        $arrowDir
    PolygonComponent fixProbe_Practice
      fillColor = $[0,1,0]
      lineColor = $[0,1,0]
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 14.7
      stopVal [duration (s)] = 3
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    KeyboardComponent keyResp_Practice
      allowedKeys = 'right','left','None'
      correctAns = $correctResp
      forceEndRoutine = False
      startVal [time (s)] = 13.5
      stopVal [duration (s)] = 4.2
      store = first key
      storeCorrect = True
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    ImageComponent mask1_prac
      image [set every repeat] = $mask1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_prac
      image [set every repeat] = $mask2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask3_prac
      image [set every repeat] = $mask3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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    ImageComponent mask4_prac
      image [set every repeat] = $mask4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 3.3
      stopVal [duration (s)] = 0.2
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  Routine feedback_Run
    KeyboardComponent space_Run
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent feedbackTxtRun
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Your performance was '+percent_correct+'%.'
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  Routine finalRoutine
    KeyboardComponent space_final
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent txt_final
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Congratulations! You have finished the experiment. 
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  Routine masks_Instr
    ImageComponent mask1_inst
      image [set every repeat] = $mask1
      pos = (-0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask2_inst
      image [set every repeat] = $mask2
      pos = (0.11, 0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent mask3_inst
      image [set every repeat] = $mask3
      pos = (0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent mask4_inst
      image [set every repeat] = $mask4
      pos = (-0.11, -0.11)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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Flow
  Routine Welcome
  LoopInitiator instructionLoop loopType="TrialHandler"
    conditionsFile = instructionTxt.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions', "On each trial, your task will be to remember images that are presented to you. The images will consist of either faces or scenes and there can be anywhere from one to four items.  (Press 'space')")]),
      OrderedDict([('instructions', "At the end of a trial you will have to indicate whether an image presented after a short delay was part of the items that you remembered. (Press 'space')")]),
      OrderedDict([('instructions', "Now we will see an example of trial. (Press 'space')")])]
    Routine Instr1
  LoopTerminator instructionLoop
  LoopInitiator trials_Instr loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = trials_Int.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus1', 'scrambles/id019_v1_fm.jpg'), ('stimulus2', 'scrambles/id004_v1_fm.jpg'), ('stimulus3', 'scrambles/id005_v1_fm.jpg'), ('stimulus4', 'images/id004_v1_fm.jpg'), ('probeIm', 'images/id004_v1_fm.jpg'), ('probeCon', 1), ('load', 1), ('category', 'fm'), ('correctResp', 'left'), ('arrowDir', '<')]),
      OrderedDict([('stimulus1', 'images/id030_v1_fm.jpg'), ('stimulus2', 'images/id020_v1_fm.jpg'), ('stimulus3', 'images/id006_v1_fm.jpg'), ('stimulus4', 'images/id001_v1_fm.jpg'), ('probeIm', 'images/id016_v1_fm.jpg'), ('probeCon', 0), ('load', 4), ('category', 'fm'), ('correctResp', 'None'), ('arrowDir', '>')]),
      OrderedDict([('stimulus1', 'scrambles/id095_v1_si.jpg'), ('stimulus2', 'images/id074_v1_si.jpg'), ('stimulus3', 'images/id103_v1_si.jpg'), ('stimulus4', 'images/id096_v1_si.jpg'), ('probeIm', 'images/id091_v1_si.jpg'), ('probeCon', 0), ('load', 3), ('category', 'si'), ('correctResp', 'None'), ('arrowDir', '>')]),
      OrderedDict([('stimulus1', 'images/id090_v1_si.jpg'), ('stimulus2', 'scrambles/id098_v1_si.jpg'), ('stimulus3', 'images/id085_v1_si.jpg'), ('stimulus4', 'scrambles/id103_v1_si.jpg'), ('probeIm', 'images/id085_v1_si.jpg'), ('probeCon', 1), ('load', 2), ('category', 'si'), ('correctResp', 'right'), ('arrowDir', '>')])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
    Routine trial_Instr
    Routine masks_Instr
    Routine delayInst
    Routine responseInst
    Routine reward
  LoopTerminator trials_Instr
  LoopInitiator repeat_InstrTrials loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine reminderButtons
    LoopInitiator trials_instr2 loopType="TrialHandler"
      Selected rows = 1:9
      conditionsFile = trials_Int.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimulus1', 'scrambles/id019_v1_fm.jpg'), ('stimulus2', 'scrambles/id004_v1_fm.jpg'), ('stimulus3', 'scrambles/id005_v1_fm.jpg'), ('stimulus4', 'images/id004_v1_fm.jpg'), ('probeIm', 'images/id004_v1_fm.jpg'), ('probeCon', 1), ('load', 1), ('category', 'fm'), ('correctResp', 'left'), ('arrowDir', '<')]),
        OrderedDict([('stimulus1', 'images/id030_v1_fm.jpg'), ('stimulus2', 'images/id020_v1_fm.jpg'), ('stimulus3', 'images/id006_v1_fm.jpg'), ('stimulus4', 'images/id001_v1_fm.jpg'), ('probeIm', 'images/id016_v1_fm.jpg'), ('probeCon', 0), ('load', 4), ('category', 'fm'), ('correctResp', 'None'), ('arrowDir', '>')]),
        OrderedDict([('stimulus1', 'scrambles/id095_v1_si.jpg'), ('stimulus2', 'images/id074_v1_si.jpg'), ('stimulus3', 'images/id103_v1_si.jpg'), ('stimulus4', 'images/id096_v1_si.jpg'), ('probeIm', 'images/id091_v1_si.jpg'), ('probeCon', 0), ('load', 3), ('category', 'si'), ('correctResp', 'None'), ('arrowDir', '>')]),
        OrderedDict([('stimulus1', 'images/id090_v1_si.jpg'), ('stimulus2', 'scrambles/id098_v1_si.jpg'), ('stimulus3', 'images/id085_v1_si.jpg'), ('stimulus4', 'scrambles/id103_v1_si.jpg'), ('probeIm', 'images/id085_v1_si.jpg'), ('probeCon', 1), ('load', 2), ('category', 'si'), ('correctResp', 'right'), ('arrowDir', '>')])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
      Routine trialBegBlank_practice
      Routine trial_practice
      Routine feedback_2
    LoopTerminator trials_instr2
    Routine feedbackTest
  LoopTerminator repeat_InstrTrials
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('textBefore_run', 'When ready for the first run, press SPACE'), ('trialSelect', 'trials_1.xlsx')]),
      OrderedDict([('textBefore_run', 'Done with run 1. Feel free to take a short break. Press SPACE when ready to continue.'), ('trialSelect', 'trials_2.xlsx')]),
      OrderedDict([('textBefore_run', 'Done with run 2. Feel free to take a short break. Press SPACE when ready to continue.'), ('trialSelect', 'trials_3.xlsx')]),
      OrderedDict([('textBefore_run', 'Done with run 3. Feel free to take a short break. Press SPACE when ready to continue.'), ('trialSelect', 'trials_4.xlsx')])]
    Routine Before_run
    Routine blankStart
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $trialSelect
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine trialEndBlank
    LoopTerminator trials
    Routine blankEnd
    Routine feedback_Run
  LoopTerminator runs
  Routine finalRoutine
